PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Perceptual_Learning
  keyboardBackend = ioHub
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Routines
  Routine prac_trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        #k = event.waitKeys() # this will not start the trial unless there is input from the keyboard

        kb.clock.reset()

        key_up = 0
        key_down = 0

        count = count + 1

        jitter = random() * (1.8 - 0.9) + 0.9
        jitter = round(jitter, 1) # round to 1 decimal place

        stimulus_pulse_started = False
        stimulus_pulse_ended = False

        response_pulse_started = False
        response_pulse_ended = False

        stimulus_pulse_start_time = []
        response_pulse_start_time = []
      Each Frame:
        remainingKeys = kb.getKeys(keyList=['space', 'right'], waitRelease=True, clear=True)

        pressedKeys = kb.getKeys(keyList=['space'], waitRelease=False, clear=True)

        if pressedKeys:
            for thisKey in pressedKeys:
                if thisKey.name == 'space':
                    key_down = 1

        if remainingKeys:
            for thisKey in remainingKeys:
                if thisKey.name == 'space':
                    if thisKey.duration: #if the key has been lifted
                        method_1 = kb.clock.getTime() #current time on the kb clock
                        method_2 = thisKey.duration # this gets the time from the key pressed event to the key lift event (will include the 2 seconds of core.wait)
                        method_x = thisKey.duration + thisKey.tDown #the global time the key was pressed down + the time duration before it was released
                        key_up = 1
                        kb.clearEvents() #clear the key events
                elif thisKey.name == 'right':
                    kb.clearEvents()
                    continueRoutine = False


        if prac_stim.status == STARTED and not stimulus_pulse_started: #Change 'stimulus' to match the name of the component that you want to send the trigger for
            win.callOnFlip(port.write, str.encode('1'))
            stimulus_pulse_start_time = globalClock.getTime()
            stimulus_pulse_started  = True

        if stimulus_pulse_started and not stimulus_pulse_ended:
                if globalClock.getTime() - stimulus_pulse_start_time >= 0.005:
                    win.callOnFlip(port.write,  str.encode('0'))
                    stimulus_pulse_ended = True

        if key_up == 1 and not response_pulse_started: #Change 'stimulus' to match the name of the component that you want to send the trigger for
            win.callOnFlip(port.write, str.encode('2'))
            response_pulse_start_time = globalClock.getTime()
            response_pulse_started  = True

        if response_pulse_started and not response_pulse_ended:
                if globalClock.getTime() - response_pulse_start_time >= 0.005:
                    win.callOnFlip(port.write,  str.encode('0'))
                    response_pulse_ended = True
      End Experiment:
        port.close()
      End Routine:
        thisExp.addData('Trigger_Stim_Start', stimulus_pulse_start_time)
        thisExp.addData('Trigger_Resp_Start', response_pulse_start_time)
        thisExp.addData('jitter', jitter)
        thisExp.addData('method_x', method_x) # The current time on the kb clock
        thisExp.addData('method_1', method_1) # The overall time when the button was released
        thisExp.addData('method_2', method_2) # How long was the key pressed for
        thisExp.addData("button", thisKey.name)
        thisExp.addData("button_time", thisKey.tDown)
        thisExp.addData("button_rt", thisKey.rt)
    TextComponent prac_fixation
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = +
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    TextComponent prac_fixation2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [condition] = $key_down == 1
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent prac_stim
      image [set every repeat] = $stimulus
      size = [1.8, 1]
      startVal [condition] = $prac_fixation2.status == FINISHED
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  Routine Welcome
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard #allows us to watch for key lifts
        from psychopy import event, core, visual # for when the key is first pressed
        import numpy as np

        import serial #Import the serial library
        port = serial.Serial('COM3', baudrate = 115200) #Change 'COM3' here to your serial port address

        kb = keyboard.Keyboard(bufferSize=10, waitForStart=True) #specify the keyboard object

        count = 0 #might be useful to check how many trials are running

        method_1 = [] #for RT data
        method_2 = [] #for RT data
        method_x = [] #to mark time stamp when key was lifted

        key_up = [] #this will be 1 for yes and 0 for no as a condition for stimuli and triggers - reflects space bar lift
        key_down = [] #same but for press down used to time the appearance of stimuli
    ImageComponent welcome_screen
      image = $"welcome.png"
      size = [1.8, 1]
      startVal [time (s)] = 0.0
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    KeyboardComponent intr_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_1
    ImageComponent instr_1_screen
      image = $"instr_1.png"
      size = [1.8, 1]
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp_1
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_2
    ImageComponent instr_2_screen
      image = $"instr_2.png"
      size = [1.8, 1]
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp_2
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine letters
    ImageComponent letters_prac_screen
      image [set every repeat] = $stimulus
      size = [1.8, 1]
      startVal [time (s)] = 0.0
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    KeyboardComponent letters_prac_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_3
    ImageComponent instr_3_screen
      image = $"instr_3.png"
      size = [1.8, 1]
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp_3
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_4
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  Routine Instr_5
    ImageComponent instr_5_screen
      image = $"instr_5.png"
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp_5
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine well_done
    ImageComponent well_done_screen
      image = $"well_done.png"
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Finished
    ImageComponent finished_screen
      image = $"finished.png"
      size = (1.8,1.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Instr_1
  Routine Instr_2
  LoopInitiator letters_loop loopType="TrialHandler"
    conditionsFile = letters_trials.csv
    isTrials = False
    loopType = sequential
    nReps = 3
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    conditions:
      [OrderedDict([('stimulus', 'con_m.png')]),
      OrderedDict([('stimulus', 'con_n.png')])]
    Routine letters
  LoopTerminator letters_loop
  Routine Instr_3
  Routine Instr_4
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = prac_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimulus', 'at_m.png')]),
      OrderedDict([('stimulus', 'at_n.png')]),
      OrderedDict([('stimulus', 'con_m.png')]),
      OrderedDict([('stimulus', 'con_n.png')]),
      OrderedDict([('stimulus', 'per_m.png')]),
      OrderedDict([('stimulus', 'per_n.png')])]
    Routine prac_trial
  LoopTerminator practice
  Routine Instr_5
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = prac_trials.csv
      loopType = random
      nReps = 4
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      conditions:
        [OrderedDict([('stimulus', 'at_m.png')]),
        OrderedDict([('stimulus', 'at_n.png')]),
        OrderedDict([('stimulus', 'con_m.png')]),
        OrderedDict([('stimulus', 'con_n.png')]),
        OrderedDict([('stimulus', 'per_m.png')]),
        OrderedDict([('stimulus', 'per_n.png')])]
      Routine prac_trial
    LoopTerminator trials
    Routine well_done
  LoopTerminator blocks
  Routine Finished
